PsychoPy2experiment version="2022.2.2"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = tutorial 5
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar", "Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = click to submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/urbun/Downloads/study words (1).xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'vase'},
      {'study_word': 'tiger'},
      {'study_word': 'book'},
      {'study_word': 'cushion'},
      {'study_word': 'piano'},
      {'study_word': 'curtain'},
      {'study_word': 'chair'},
      {'study_word': 'potato'},
      {'study_word': 'sandwich'},
      {'study_word': 'card'},
      {'study_word': 'spoon'},
      {'study_word': 'jeans'},
      {'study_word': 'knob'},
      {'study_word': 'switch'},
      {'study_word': 'plate'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = C:/Users/urbun/Downloads/test (1).xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test': '_a_e'},
      {'test': 't_g_r'},
      {'test': '_oo_'},
      {'test': 'c_s_i_n'},
      {'test': '_ia_n_'},
      {'test': 'c_r_ai_'},
      {'test': '_ha_r'},
      {'test': 'p_t_t_'},
      {'test': '_a_dw_c_'},
      {'test': 'c_r_'},
      {'test': 's_o_n'},
      {'test': 'j_a_s'},
      {'test': '_no_'},
      {'test': 's_i_c_'},
      {'test': 'p_at_'},
      {'test': '_p_l_'},
      {'test': 's_i_e'},
      {'test': '_ta_u_'},
      {'test': '_l_s_'},
      {'test': 'w_te_'},
      {'test': 'b_i_k'},
      {'test': 'n_ck_a_e'},
      {'test': '_e_v_s'},
      {'test': 'r_bb_r'},
      {'test': '_il_o_'},
      {'test': '_ap_o_'},
      {'test': 'c_u_t_y'},
      {'test': 'p_c_e_'},
      {'test': 'e_g_i_h'},
      {'test': 'a_ce_s'}]
    Routine test
  LoopTerminator trials_2
